<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenEphys.Bonsai.Miniscope;assembly=OpenEphys.Bonsai.Miniscope"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UclaMiniCam">
          <p1:Index>2</p1:Index>
          <p1:LedBrightness>10</p1:LedBrightness>
          <p1:SensorGain>Low</p1:SensorGain>
          <p1:FramesPerSecond>Fps50</p1:FramesPerSecond>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Trigger</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>FrameNumber,Trigger</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>minicam-aux_.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp,Value.Item1,Value.Item2</io:Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>minicam_.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>50</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>1024</cv:Width>
            <cv:Height>768</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>