WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(LedBrightness, Focus, SensorGain, LedRespectsDigitalIn, FramesPerSecond, FileName, BufferSize)
-> GroupWorkflow "Initialize Subjects"
    BooleanProperty(Value=false)
    -> BehaviorSubject RecordButton

    BooleanProperty(Value=false)
    -> BehaviorSubject RecordOnTriggerButton

    StringProperty(Value=Y800)
    -> BehaviorSubject VideoCodec

    PropertySource<Bonsai.Vision.VideoWriter,Bonsai.IO.PathSuffix>(MemberName=Suffix, Value=FileCount)
    -> BehaviorSubject PathSuffix

    ExternalizedMapping(Value(DisplayName=FileName, Category=Saving))
    -> PropertySource<Bonsai.Vision.VideoWriter,System.String>(MemberName=FileName, Value=C:\Users\brand\private\bonsai_workflows\miniscope-data\test_)
    -> BehaviorSubject FileName

    IntProperty(Value=0)
    -> BehaviorSubject RecordingDuration

    BooleanProperty(Value=false)
    -> BehaviorSubject UseRecordDuration

    BooleanProperty(Value=false)
    -> BehaviorSubject RecordingStatus

    IntProperty(Value=100)
    -> BehaviorSubject BackgroundFrames

    DoubleProperty(Value=14.3)
    -> BehaviorSubject BackgroundThreshold

    IntProperty(Value=3)
    -> BehaviorSubject Sigma

    DoubleProperty(Value=192)
    -> BehaviorSubject SaturationThreshold

    PropertySource<Bonsai.Vision.SolidColor,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=0, Val2=100, Val3=100))
    -> BehaviorSubject SaturationColor

    BooleanProperty(Value=false)
    -> BehaviorSubject CommutatorConnected

    StringProperty(Value="")
    -> BehaviorSubject PortName

    BooleanProperty(Value=true)
    -> BehaviorSubject CommutatorEnable

    BooleanProperty(Value=true)
    -> BehaviorSubject CommutatorEnableLed

    StringProperty
    -> BehaviorSubject CommutatorStatus

    IntProperty(Value=1)
    -> BehaviorSubject CameraIndex

    ExternalizedMapping(Value(DisplayName=LedRespectsDigitalIn, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(MemberName=LedRespectsDigitalIn, Value=None)
    -> BehaviorSubject LedRespectsDigitalIn

    ExternalizedMapping(Value(DisplayName=FramesPerSecond, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.FrameRateV4>(MemberName=FramesPerSecond, Value=Fps30)
    -> BehaviorSubject FrameRate

    ExternalizedMapping(Value(DisplayName=SensorGain, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.GainV4>(MemberName=SensorGain, Value=Low)
    -> BehaviorSubject SensorGain

    ExternalizedMapping(Value(DisplayName=Focus, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,System.Double>(MemberName=Focus, Value=5)
    -> BehaviorSubject Focus

    ExternalizedMapping(Value(DisplayName=LedBrightness, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,System.Double>(MemberName=LedBrightness, Value=1)
    -> BehaviorSubject LedBrightness

    BooleanProperty(Value=false)
    -> BehaviorSubject MiniscopeConnected

    StringProperty
    -> BehaviorSubject MiniscopeStatus

    StringProperty
    -> BehaviorSubject RecordingError

    ExternalizedMapping(Value(DisplayName=BufferSize, Category=Display))
    -> IntProperty(Value=100)
    -> BehaviorSubject BufferSize

GroupWorkflow "Data Acquisition"
    SubscribeSubject MiniscopeConnected
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #2
    SubscribeSubject CameraIndex
    -> PropertyMapping(Index) => #4
    #2, #4 -> SelectMany
        ExternalizedMapping(Index) => #0
        SubscribeSubject LedBrightness
        -> PropertyMapping(LedBrightness) => #2
        SubscribeSubject Focus
        -> PropertyMapping(Focus) => #4
        SubscribeSubject SensorGain
        -> PropertyMapping(SensorGain) => #6
        SubscribeSubject FrameRate
        -> PropertyMapping(FramesPerSecond) => #8
        SubscribeSubject LedRespectsDigitalIn
        -> PropertyMapping(LedRespectsDigitalIn) => #10
        #0, #2, #4, #6, #8, #10 -> OpenEphys.Miniscope.UclaMiniscopeV4(Index=1, LedBrightness=1, Focus=5, SensorGain=Low, FramesPerSecond=Fps30, LedRespectsDigitalIn=None) => #11
        SubscribeSubject MiniscopeConnected
        -> Condition => #13
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #11, #13 -> TakeUntil
        -> Materialize => #15
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception == null
        -> Dematerialize
        -> Catch
        -> WorkflowOutput
        #15 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject MiniscopeStatus
    -> Repeat
    -> BehaviorSubject Frame
    -> MemberSelector(Selector=FrameTime)
    -> BufferTime(TimeSpan=PT2S, TimeShift=PT0.1S)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: (it.Count > 1) ? (it.Count - 1) * 1e3 / (it[it.Count - 1] - it[0]) : (it.Count == 1) ? it[0] / 1e3 : 0.0
    -> PublishSubject AverageFrameRate
-> WorkflowOutput

GroupWorkflow "Display UI"
    OpenEphys.Miniscope.Design.GUI.ImGuiMiniscopeVisualizerBuilder => #0
    -> PublishSubject ImageTick
    #0 -> Bonsai.Design.VisualizerWindow(Visible=true, Location(X=400, Y=100), Size(Width=1100, Height=900), WindowState=Normal)

    SubscribeSubject ImageTick
    -> GroupWorkflow StatusBar
        WorkflowInput Source1 => #0
        SubscribeSubject CameraIndex => #1
        SubscribeSubject BufferSize => #2
        SubscribeSubject MiniscopeConnected => #3
        SubscribeSubject MiniscopeStatus => #4
        SubscribeSubject RecordingError => #5
        #1, #2, #3, #4, #5 -> OpenEphys.Miniscope.Design.Gui.CreateStatusBarDto => #6
        #0, #6 -> WithLatestFrom
        -> OpenEphys.Miniscope.Design.Gui.StatusBar => #8
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #8 -> MemberSelector(Selector=Item2) => #11
        -> MemberSelector(Selector=CameraIndex)
        -> DistinctUntilChanged
        -> MulticastSubject CameraIndex
        #11 -> MemberSelector(Selector=BufferSize)
        -> DistinctUntilChanged
        -> MulticastSubject BufferSize
        #11 -> MemberSelector(Selector=IsConnected)
        -> DistinctUntilChanged
        -> MulticastSubject MiniscopeConnected
        #11 -> MemberSelector(Selector=StatusMessage)
        -> DistinctUntilChanged
        -> MulticastSubject MiniscopeStatus
        #11 -> MemberSelector(Selector=RecordingError)
        -> DistinctUntilChanged
        -> MulticastSubject RecordingError
    -> GroupWorkflow "Plot Settings"
        WorkflowInput Source1 => #0
        GroupWorkflow Miniscope => #1
            SubscribeSubject LedBrightness => #0
            SubscribeSubject Focus => #1
            SubscribeSubject SensorGain => #2
            SubscribeSubject FrameRate => #3
            SubscribeSubject LedRespectsDigitalIn => #4
            #0, #1, #2, #3, #4 -> OpenEphys.Miniscope.Design.GUI.CreateMiniscopeSettingsDto
            -> WorkflowOutput
        GroupWorkflow File => #2
            SubscribeSubject RecordButton => #0
            SubscribeSubject RecordOnTriggerButton => #1
            SubscribeSubject VideoCodec => #2
            SubscribeSubject FileName => #3
            SubscribeSubject PathSuffix => #4
            SubscribeSubject RecordingDuration => #5
            SubscribeSubject UseRecordDuration => #6
            #0, #1, #2, #3, #4, #5, #6 -> OpenEphys.Miniscope.Design.GUI.CreateFileSettingsDto
            -> WorkflowOutput
        GroupWorkflow Saturation => #3
            SubscribeSubject SaturationThreshold => #0
            SubscribeSubject SaturationColor => #1
            #0, #1 -> OpenEphys.Miniscope.Design.GUI.CreateSaturationSettingsDto
            -> WorkflowOutput
        GroupWorkflow Dff => #4
            SubscribeSubject BackgroundFrames => #0
            SubscribeSubject BackgroundThreshold => #1
            SubscribeSubject Sigma => #2
            #0, #1, #2 -> OpenEphys.Miniscope.Design.GUI.CreateDffSettingsDto
            -> WorkflowOutput
        GroupWorkflow Commutator => #5
            SubscribeSubject PortName => #0
            SubscribeSubject CommutatorConnected => #1
            SubscribeSubject CommutatorEnable => #2
            SubscribeSubject CommutatorEnableLed => #3
            SubscribeSubject CommutatorStatus => #4
            #0, #1, #2, #3, #4 -> OpenEphys.Miniscope.Design.GUI.CreateCommutatorSettingsDto
            -> WorkflowOutput
        #1, #2, #3, #4, #5 -> OpenEphys.Miniscope.Design.GUI.CreateSettingsPanelDto => #6
        #0, #6 -> WithLatestFrom => #7
        SubscribeSubject RecordingStatus
        -> PropertyMapping(RecordingStatus) => #9
        SubscribeSubject AverageFrameRate
        -> PropertyMapping(AverageFrameRate) => #11
        SubscribeSubject MiniscopeConnected
        -> PropertyMapping(AcquisitionStatus) => #13
        #7, #9, #11, #13 -> OpenEphys.Miniscope.Design.GUI.SettingsPanel => #14
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #14 -> MemberSelector(Selector=Item2) => #17
        -> GroupWorkflow Miniscope
            WorkflowInput Source1
            -> MemberSelector(Selector=Miniscope) => #1
            -> MemberSelector(Selector=LedBrightness)
            -> DistinctUntilChanged
            -> MulticastSubject LedBrightness
            #1 -> MemberSelector(Selector=Focus)
            -> DistinctUntilChanged
            -> MulticastSubject Focus
            #1 -> MemberSelector(Selector=SensorGain)
            -> DistinctUntilChanged
            -> MulticastSubject SensorGain
            #1 -> MemberSelector(Selector=FrameRate)
            -> DistinctUntilChanged
            -> MulticastSubject FrameRate
            #1 -> MemberSelector(Selector=LedRespectsDigitalIn)
            -> DistinctUntilChanged
            -> MulticastSubject LedRespectsDigitalIn
        #17 -> GroupWorkflow File
            WorkflowInput Source1
            -> MemberSelector(Selector=File) => #1
            -> MemberSelector(Selector=RecordButton)
            -> DistinctUntilChanged
            -> Condition
                SubscribeSubject MiniscopeConnected
                -> WorkflowOutput
            -> MulticastSubject RecordButton
            #1 -> MemberSelector(Selector=RecordOnTriggerButton)
            -> DistinctUntilChanged
            -> Condition
                SubscribeSubject MiniscopeConnected
                -> WorkflowOutput
            -> MulticastSubject RecordOnTriggerButton
            #1 -> MemberSelector(Selector=VideoCodec)
            -> DistinctUntilChanged
            -> MulticastSubject VideoCodec
            #1 -> MemberSelector(Selector=FileName)
            -> DistinctUntilChanged
            -> MulticastSubject FileName
            #1 -> MemberSelector(Selector=Suffix)
            -> DistinctUntilChanged
            -> MulticastSubject PathSuffix
            #1 -> MemberSelector(Selector=RecordingDuration)
            -> DistinctUntilChanged
            -> MulticastSubject RecordingDuration
            #1 -> MemberSelector(Selector=UseRecordDuration)
            -> DistinctUntilChanged
            -> MulticastSubject UseRecordDuration
        #17 -> GroupWorkflow Saturation
            WorkflowInput Source1
            -> MemberSelector(Selector=Saturation) => #1
            -> MemberSelector(Selector=Threshold)
            -> DistinctUntilChanged
            -> MulticastSubject SaturationThreshold
            #1 -> MemberSelector(Selector=Color)
            -> DistinctUntilChanged
            -> MulticastSubject SaturationColor
        #17 -> GroupWorkflow Dff
            WorkflowInput Source1
            -> MemberSelector(Selector=Dff) => #1
            -> MemberSelector(Selector=BackgroundFrames)
            -> DistinctUntilChanged
            -> MulticastSubject BackgroundFrames
            #1 -> MemberSelector(Selector=BackgroundThreshold)
            -> DistinctUntilChanged
            -> MulticastSubject BackgroundThreshold
            #1 -> MemberSelector(Selector=Sigma)
            -> DistinctUntilChanged
            -> MulticastSubject Sigma
        #17 -> GroupWorkflow Commutator
            WorkflowInput Source1
            -> MemberSelector(Selector=Commutator) => #1
            -> MemberSelector(Selector=PortName)
            -> DistinctUntilChanged
            -> MulticastSubject PortName
            #1 -> MemberSelector(Selector=IsConnected)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorConnected
            #1 -> MemberSelector(Selector=Enable)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorEnable
            #1 -> MemberSelector(Selector=EnableLed)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorEnableLed
            #1 -> MemberSelector(Selector=StatusMessage)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorStatus
    -> OpenEphys.Miniscope.Design.GUI.SameLine => #6
    SubscribeSubject BufferSize
    -> PropertyMapping(BufferSize) => #8
    #6, #8 -> GroupWorkflow "Plot Data"
        WorkflowInput Source1 => #0
        SubscribeSubject Frame
        -> MemberSelector(Selector=Image) => #2
        -> Bonsai.ImGui.Visualizers.SampleOnNewFrame ImageTick
        -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        -> PropertyMapping(MiniscopeImage) => #5
        #2 -> GroupWorkflow CalculateDisplaySaturation
            WorkflowInput Source1 => #0
            SubscribeSubject SaturationThreshold
            -> PropertyMapping(ThresholdValue) => #2
            #0, #2 -> Bonsai.Vision.Threshold(ThresholdValue=192, MaxValue=255, ThresholdType=ToZero) => #3
            -> InputMapping => #4
            #3 -> MemberSelector(Selector=Size)
            -> PropertyMapping(Size) => #6
            SubscribeSubject SaturationColor
            -> PropertyMapping(Color) => #8
            #4, #6, #8 -> Bonsai.Vision.SolidColor(Size(Width=640, Height=480), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=100, Val3=100)) => #9
            #9, #3 -> Zip
            -> Bonsai.Vision.Mask(FillValue(Val0=1, Val1=1, Val2=1, Val3=1)) => #11
            #11, #0 -> Zip
            -> Add
            -> WorkflowOutput
        -> Bonsai.ImGui.Visualizers.SampleOnNewFrame ImageTick
        -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        -> PropertyMapping(SaturationImage) => #9
        #2 -> GroupWorkflow "Calculate DeltaFOverF"
            WorkflowInput Source1 => #0
            SubscribeSubject BackgroundFrames
            -> PropertyMapping(BackgroundFrames) => #2
            SubscribeSubject BackgroundThreshold
            -> PropertyMapping(BackgroundThreshold) => #4
            SubscribeSubject Sigma
            -> PropertyMapping(Sigma) => #6
            #0, #2, #4, #6 -> OpenEphys.Miniscope.DeltaFOverF(BackgroundFrames=100, BackgroundThreshold=14.3, Sigma=3)
            -> WorkflowOutput
        -> Bonsai.ImGui.Visualizers.SampleOnNewFrame ImageTick
        -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        -> PropertyMapping(dFFImage) => #13
        #2 -> MemberSelector(Selector=Size)
        -> DistinctUntilChanged => #15
        -> MemberSelector(Selector=Height)
        -> PropertyMapping(ImageHeight) => #17
        #15 -> MemberSelector(Selector=Width)
        -> PropertyMapping(ImageWidth) => #19
        #2 -> Bonsai.Vision.ImageHistogram
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame ImageTick
        -> PropertyMapping(ImageHistogram) => #22
        SubscribeSubject MiniscopeConnected
        -> Condition => #24
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(Capacity(DisplayName=BufferSize, Category=Display)) => #25
        #24, #25 -> SelectMany
            SubscribeSubject Frame
            -> MemberSelector(Selector=Quaternion) => #1
            ExternalizedMapping(Capacity) => #2
            #1, #2 -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=100, IndexSelector="", ValueSelector="X,Y,Z,W") => #3
            SubscribeSubject MiniscopeConnected
            -> Condition => #5
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            #3, #5 -> TakeUntil
            -> WorkflowOutput
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame ImageTick
        -> PropertyMapping(QuaternionSeries) => #28
        #25, #24 -> SelectMany
            SubscribeSubject Frame
            -> MemberSelector(Selector=DigitalIn) => #1
            -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #2
            #1 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn1)) => #3
            #2, #3 -> Zip => #4
            ExternalizedMapping(Capacity) => #5
            #4, #5 -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=100, IndexSelector="", ValueSelector="Item1,Item2") => #6
            SubscribeSubject MiniscopeConnected
            -> Condition => #8
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            #6, #8 -> TakeUntil
            -> WorkflowOutput
        -> Bonsai.ImGui.Visualizers.LatestOnNewFrame ImageTick
        -> PropertyMapping(DigitalInSeries) => #31
        #0, #5, #9, #13, #17, #19, #22, #28, #31 -> OpenEphys.Miniscope.Design.GUI.DataPanel(ImageHeight=480, ImageWidth=640, ImageHeightFraction=0.6)
        -> WorkflowOutput

GroupWorkflow "Save Data"
    SubscribeSubject RecordButton
    -> Condition => #1
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Frame
    -> MemberSelector(Selector=DigitalIn)
    -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value="DigitalIn0 DigitalIn1")) => #4
    SubscribeSubject RecordOnTriggerButton
    -> Condition => #6
        WorkflowInput Source1
        -> WorkflowOutput
    #4, #6 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1 && it.Item2
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #10
    #1, #10 -> Merge
    -> Take(Count=1)
    -> MulticastSubject RecordingStatus
    -> StringProperty
    -> MulticastSubject RecordingError => #15
    SubscribeSubject FileName
    -> Format(Format={0}.avi)
    -> PropertyMapping(ImageFileName) => #18
    SubscribeSubject VideoCodec
    -> PropertyMapping(FourCC) => #20
    SubscribeSubject PathSuffix
    -> PropertyMapping(Suffix) => #22
    SubscribeSubject FileName
    -> Format(Format={0}.csv)
    -> PropertyMapping(QuaternionFileName) => #25
    SubscribeSubject FrameRate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32(it.ToString().Substring(3))
    -> PropertyMapping(FrameRate) => #28
    #15, #18, #20, #22, #25, #28 -> SelectMany
        SubscribeSubject Frame => #0
        SubscribeSubject RecordButton => #1
        SubscribeSubject RecordOnTriggerButton => #2
        #1, #2 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: !it.Item1 && !it.Item2
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject Frame
        -> MemberSelector(Selector=DigitalIn)
        -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value="DigitalIn0 DigitalIn1"))
        -> BitwiseNot => #9
        SubscribeSubject RecordOnTriggerButton
        -> Condition => #11
            WorkflowInput Source1
            -> WorkflowOutput
        #9, #11 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 && it.Item2
        -> Condition => #14
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject UseRecordDuration
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #17
        SubscribeSubject RecordingDuration
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #20
        #17, #20 -> Delay(DueTime=PT0S)
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordButton => #23
        SubscribeSubject MiniscopeConnected
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordButton
        -> MulticastSubject RecordOnTriggerButton => #28
        #5, #14, #23, #28 -> Merge
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordingStatus => #31
        #0, #31 -> TakeUntil => #32
        -> WorkflowOutput
        #32 -> MemberSelector(Selector="Quaternion.X,Quaternion.Y,Quaternion.Z,Quaternion.W,DigitalIn")
        -> Timestamp => #35
        ExternalizedMapping(FileName(DisplayName=QuaternionFileName)) => #36
        ExternalizedMapping(Suffix) => #37
        #35, #36, #37 -> Bonsai.IO.CsvWriter(FileName=C:\Users\brand\private\bonsai_workflows\miniscope-data\test_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
        -> Materialize
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject RecordingError => #42
        -> Catch
        #32 -> MemberSelector(Selector=Image) => #44
        ExternalizedMapping(FourCC, FrameRate, FileName(DisplayName=ImageFileName)) => #45
        #44, #45, #37 -> Bonsai.Vision.VideoWriter
          FileName=C:\Users\brand\private\bonsai_workflows\miniscope-data\test_.avi
          Suffix=FileCount
          Buffered=true
          Overwrite=false
          FourCC=Y800
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> Materialize
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject RecordingError => #50
        #42, #50 -> Merge
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordButton
        -> MulticastSubject RecordOnTriggerButton
        #50 -> Catch
    -> Repeat

GroupWorkflow Commutator
    SubscribeSubject CommutatorConnected
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #2
    SubscribeSubject PortName
    -> PropertyMapping(PortName) => #4
    SubscribeSubject CommutatorEnable
    -> PropertyMapping(Enable) => #6
    SubscribeSubject CommutatorEnableLed
    -> PropertyMapping(EnableLed) => #8
    #2, #4, #6, #8 -> SelectMany
        SubscribeSubject Frame => #0
        SubscribeSubject CommutatorConnected
        -> Condition => #2
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #0, #2 -> TakeUntil
        -> MemberSelector(Selector=Quaternion) => #4
        ExternalizedMapping(PortName, Enable, EnableLed) => #5
        #4, #5 -> IncludeWorkflow(Path=OpenEphys.Commutator:AutoCommutator.bonsai, PortName="", Enable=true, EnableLed=true)
        -> Materialize => #7
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception == null
        -> Dematerialize
        -> Catch
        -> WorkflowOutput
        #7 -> Bonsai.Scripting.Expressions.ExpressionCondition => #12
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject CommutatorStatus
        #12 -> BooleanProperty(Value=false)
        -> MulticastSubject CommutatorConnected
    -> Repeat
